CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:47
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['For the pipeline to turn, the following images are mandatory: ', '- Image of the cytoplasm or the whole cell at two levels (basal and mid-height)', '- Image of the nucleus (here Hoechst at mid-cell level)', '- 2 bright field images at two different heights ', 'Others are optional and depend on the intended observations. ']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot contain "pmd") (file does contain "Series")

Metadata:[module_num:2|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notes:['The regular expression must be adapted to the filenames of your data. It needs to extract the identifiers of the different images that the pipelines requires to run, from either the filename, the folder name or the metadata. ', 'The Image Number identifies the individual field of view. Plane and Channel identify together the different images taken for one field of view. They are mandatory. ', 'Date and PlateID are useful to group the field of view taken on one coverslip or in one experimental condition. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:Series0(?P<ImageNumber>\\\\d*)--Z0(?P<Plane>\\\\d*)--C(?P<Channel>.*).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:.*[\\\\\\\\/](?P<Date>\\\\d{4}-\\\\d{1,2}-\\\\d{1,2})[\\\\\\\\/](?P<PlateID>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This module assign names to the different images to analyze for one field of view. ', 'The image of the nuclei is here named DAPI. The image of the whole cell is named SiRactin. The images of BF are named BF and BFLow. ', 'These names can be changed, but must be replaced in all the subsequent occurences in the pipeline and post-processing codes. ']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'DAPI': u'PlateID', u'BF': u'PlateID', u'BFLow': u'PlateID', u'SiRactinH': u'PlateID', u'SiRactin': u'PlateID'}, {u'DAPI': u'ImageNumber', u'BF': u'ImageNumber', u'BFLow': u'ImageNumber', u'SiRactinH': u'ImageNumber', u'SiRactin': u'ImageNumber'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Select the rule criteria:and (metadata does Channel "00") (metadata does Plane "1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "01") (metadata does Plane "0")
    Name to assign these images:SiRactin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "03") (metadata does Plane "1")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "03") (metadata does Plane "0")
    Name to assign these images:BFLow
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "01") (metadata does Plane "1")
    Name to assign these images:SiRactinH
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['Date and PlateID, extracted from the foldernames, are used to group images by the experimental conditions. ']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:PlateID

ImageMath:[module_num:5|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notes:['This module computes the difference between the two BF images. ']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:BFAfterMath
    Image or measurement?:Image
    Select the first image:BFLow
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:BF
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:6|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notes:['This module finds the targets. The typical diameter and threshold parameters should be adapted to the targets and experiments.', 'It is normal to find a lot of non-targets objects at this step. They will be filtered out afterwards. ']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
    Select the input image:BFAfterMath
    Name the primary objects to be identified:Drops
    Typical diameter of objects, in pixel units (Min,Max):15,350
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:7|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notes:['Targets are measured to filter them by size. ']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
    Select objects to measure:Drops
    Calculate the Zernike features?:No

ClassifyObjects:[module_num:8|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notes:['This module is a guide for the eye during the testing of the filter parameters. ']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
    Make each classification decision on how many measurements?:Pair of measurements
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object name:Drops
    Select the first measurement:AreaShape_Area
    Method to select the cutoff:Custom
    Enter the cutoff value:1000
    Select the second measurement:AreaShape_FormFactor
    Method to select the cutoff:Custom
    Enter the cutoff value:0.6
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
FilterObjects:[module_num:9|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notes:['The cutoff area and shape value must be adapted to your targets. Only targets above the cutoff area and above the cutoff FormFactor will be kept. ', 'At the end of this module, the identification of targets is complete. ']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
    Name the output objects:FilteredDrops
    Select the object to filter:Drops
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.6
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:1000
    Filter using a maximum measurement value?:No
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
Smooth:[module_num:10|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notes:['Smoothed confocal images give better results for segmentation. ']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
    Select the input image:DAPI
    Name the output image:SmoothDAPI
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10.0
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
IdentifyPrimaryObjects:[module_num:11|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notes:['This module spots the targets. The typical diameter must be adjusted to your image resolution and nuclei size. The lower bound on threshold may have to be adapted to your illumination conditions. ']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
    Select the input image:SmoothDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):7500,50000
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

FilterObjects:[module_num:13|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notes:['The IdentifyPrimaryObjects does not discard objects outside the size range. Too small objects are discarded at this step. ']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
    Name the output objects:FilteredNuclei
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5000
    Filter using a maximum measurement value?:No
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
Smooth:[module_num:14|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notes:['Smoothing confocal images greatly improved the detection of borders. ']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
    Select the input image:SiRactin
    Name the output image:SmoothSiR
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10.0
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
Smooth:[module_num:15|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notes:['Smoothing confocal images greatly improved the detection of borders. ']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
    Select the input image:SiRactinH
    Name the output image:SmoothSiRH
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10.0
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
IdentifySecondaryObjects:[module_num:16|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notes:['Filtered Nuclei are used as seed to propagate the cytoplasms of the cells. The threshold strategy and parameters may have to be adapted for optimal detection. ']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
    Select the input objects:FilteredNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:SmoothSiR
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.08,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:17|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notes:['The nuclei are extruded from the cells.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:FilteredNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Name the outline image:CytoplasmOutlines
    Retain outlines of the tertiary objects?:Yes
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:18|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
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

ClassifyObjects:[module_num:19|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:Cytoplasm
    Select the measurement to classify by:AreaShape_Area
    Select bin spacing:Evenly spaced bins
    Number of bins:5
    Lower threshold:15000
    Use a bin for objects below the threshold?:Yes
    Upper threshold:50000
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
FilterObjects:[module_num:20|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notes:['Small cytoplasms, corresponding to cells on the borders of the image or inadequately detected, are discarded. ']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
    Name the output objects:FilteredCytoplasm
    Select the object to filter:Cytoplasm
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:15000
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:21|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notes:['In this variant, the cell contours are also independantly found at the mid-cell level, on the SiRactinH images. This is optional. ']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
    Select the input objects:Nuclei
    Name the objects to be identified:CellsH
    Select the method to identify the secondary objects:Propagation
    Select the input image:SmoothSiRH
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Method to calculate adaptive window size:Image size
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
IdentifyTertiaryObjects:[module_num:22|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
    Select the larger identified objects:CellsH
    Select the smaller identified objects:FilteredNuclei
    Name the tertiary objects to be identified:CytoplasmH
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:23|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notes:['The Cytoplasm Minus Drops objects in particularly useful to measure the intensities in the cytoplasms, since internalized droplets would alter dramatically the measurement. ']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
    Select the larger identified objects:FilteredCytoplasm
    Select the smaller identified objects:FilteredDrops
    Name the tertiary objects to be identified:CytoplasmMinusDrops
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

SaveImages:[module_num:24|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notes:['The outlines of the cytoplasms are saved as binary images. They can be compared to the original images afterwards to assess the efficiency of the segmentation. ']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
    Select the type of image to save:Image
    Select the image to save:CytoplasmOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cytoplasm
    Saved file format:tif
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:25|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
    Select the input objects:FilteredCytoplasm
    Name the output image:CytoImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:26|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
    Select the input objects:CytoplasmH
    Name the output image:CytoHImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:27|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
    Select the input objects:FilteredDrops
    Name the output image:DropImage
    Select the color format:Binary (black & white)
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
Morph:[module_num:28|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notes:['Inner droplets are shrunk version of the Drops objects. They are used to check the intensity of the cytoplasmic dye within the target. ']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
    Select the input image:DropImage
    Name the output image:InnerDropImage
    Select the operation to perform:erode
    Number of times to repeat operation:Once
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    Diameter:20
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
ImageMath:[module_num:29|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notes:['This module may optionally be use to ponder the importance of the borders detected on the images at two different heights of the cell. Here only the borders detected at the basal level are acknowledged (first multiplier is 1, second is 0). ']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:CytoImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CytoHImage
    Multiply the second image by:0.0
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
ImageMath:[module_num:30|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notes:['This step multiplies pixelwise the binary of the cytoplasms and the binary of the filtered targets. White areas represent the part of targets that are inside a cytoplasm. ']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DropTest
    Image or measurement?:Image
    Select the first image:CytoImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:DropImage
    Multiply the second image by:1.0
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
ImageMath:[module_num:31|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notes:['This module multiplies the binary of inner targets with the image of cytoplasmic dye. On the output images, all areas outside targets have a pixel value of 0. ']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MultipliedSiR
    Image or measurement?:Image
    Select the first image:SiRactinH
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:InnerDropImage
    Multiply the second image by:1.0
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
MeasureObjectIntensity:[module_num:32|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notes:['The intensity within the targets are measured on DropTest and MultipliedSiR. The first measures the part of the target included in a cytoplasm. The second measures the intensity of cytoplamic stain inside the target. ']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
    Hidden:2
    Select an image to measure:DropTest
    Select an image to measure:MultipliedSiR
    Select objects to measure:FilteredDrops

ClassifyObjects:[module_num:33|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notes:['This is a guide for the eye to evaluate the classification of targets. Internalized targets have more than 80% of their area inside a cytoplasm, and intensity of the cytolasmic dye inside them is lower than the cutoff value. The cutoff value should be adjusted to your images. ']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
    Make each classification decision on how many measurements?:Pair of measurements
    Hidden:1
    Select the object to be classified:FilteredDrops
    Select the measurement to classify by:Intensity
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object name:FilteredDrops
    Select the first measurement:Intensity_MeanIntensity_DropTest
    Method to select the cutoff:Custom
    Enter the cutoff value:0.8
    Select the second measurement:Intensity_MeanIntensity_MultipliedSiR
    Method to select the cutoff:Custom
    Enter the cutoff value:0.1
    Use custom names for the bins?:Yes
    Enter the low-low bin name:Out
    Enter the low-high bin name:Border
    Enter the high-low bin name:In
    Enter the high-high bin name:Above
    Retain an image of the classified objects?:Yes
    Enter the image name:ClassifiedDrops

FilterObjects:[module_num:34|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notes:['Internalized targets have more than 80% of their area inside a cytoplasm, and intensity of the cytolasmic dye inside them is lower than the cutoff value. The cutoff value should be adjusted to your images. ']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
    Name the output objects:FilteredIn
    Select the object to filter:FilteredDrops
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_DropTest
    Filter using a minimum measurement value?:Yes
    Minimum value:0.8
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_MultipliedSiR
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.1

SaveImages:[module_num:35|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notes:['Image of classified targets is saved to assess the efficiency of classification. ']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
    Select the type of image to save:Image
    Select the image to save:ClassifiedDrops
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    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Final_Output
    Saved file format:tif
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
RelateObjects:[module_num:36|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notes:['This step relates the internalized targets to the cytoplasm that contains them. ']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
    Select the input child objects:FilteredIn
    Select the input parent objects:FilteredCytoplasm
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
CalculateMath:[module_num:37|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notes:['This module counts the total number of targets internalized in each cell. ']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
    Name the output measurement:Measurement
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:FilteredCytoplasm
    Select the numerator measurement:Children_FilteredIn_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ClassifyObjects:[module_num:38|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notes:['This module group the cells according to the number of internalized targets. ']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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:FilteredCytoplasm
    Select the measurement to classify by:Children_FilteredIn_Count
    Select bin spacing:Evenly spaced bins
    Number of bins:5
    Lower threshold:-0.1
    Use a bin for objects below the threshold?:No
    Upper threshold:5.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:Yes
    Name the output image:ClassifiedDropsIn
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
SaveImages:[module_num:39|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notes:['For reference, an image of the cytoplasms color-coded by number of internalized targets. ']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
    Select the type of image to save:Image
    Select the image to save:ClassifiedDropsIn
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    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ClassifiedIn
    Saved file format:tif
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:40|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notes:['Measurement of interest on different objects. ']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
    Select objects to measure:FilteredIn
    Select objects to measure:FilteredCytoplasm
    Select objects to measure:FilteredNuclei
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:41|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notes:['Measurement of interest on different objects. ']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
    Hidden:2
    Select an image to measure:SiRactin
    Select an image to measure:SiRactinH
    Select objects to measure:CytoplasmMinusDrops
    Select objects to measure:FilteredCytoplasm
    Select objects to measure:FilteredDrops

RelateObjects:[module_num:42|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notes:['This module relates the Filtered Cytoplasm with the corresponding Filtered Nucleus. ']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
    Select the input child objects:FilteredNuclei
    Select the input parent objects:FilteredCytoplasm
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ExportToSpreadsheet:[module_num:43|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notes:['Measurements are saved in .csv files. ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Exp_
    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:44|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notes:['This module saves the measurements relative to the cytoplasms + targets to the database.']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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:Cyto_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:Exp.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:FilteredCytoplasm
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object view
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:Exp
    Which objects should be used for locations?:FilteredCytoplasm
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CPA images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToDatabase:[module_num:45|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notes:['This module saves the measurements relative to the internalized targets to the database.']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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:FilteredIn
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:Exp.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:FilteredIn
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object view
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:Exp
    Which objects should be used for locations?:FilteredIn
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CPA images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToDatabase:[module_num:46|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notes:['This module saves the measurements relative to the Cytoplasms without targets to the database.']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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:CytoMinusDrops_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:Exp.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:CytoplasmMinusDrops
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object view
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:Exp
    Which objects should be used for locations?:CytoplasmMinusDrops
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CPA images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToDatabase:[module_num:47|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notes:['This module saves the measurements relative to the Nuclei to the database.']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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:Nucleus_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:Exp.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:FilteredNuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object view
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:Exp
    Which objects should be used for locations?:FilteredNuclei
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CPA images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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